<!-- En este script se definen las condiciones iniciales (pluggins) al igual que la tasa de difusion y degradacion externa -->

<!-- Condiciones de la rejilla -->

<CompuCell3D version="3.7.0">
	<Potts>
    	<!-- Basic properties of CPM (GGH) algorithm -->
    	<Dimensions x="82" y="82" z="1"/>
    	<Steps>60002</Steps>
    	<Temperature>8</Temperature>
    	<NeighborOrder>1</NeighborOrder>
	</Potts>
	
<!-- Tipos Celulares-->
	
	<Plugin Name="CellType">
    	<CellType TypeId="0" TypeName="Medium"/>
    	<CellType TypeId="1" TypeName="Activada" />
    	<CellType TypeId="2" TypeName="Inhibida"/>
    	<CellType TypeId="3" TypeName="Wall" Freeze=""/> 
	</Plugin>
	
<!-- Volumen y Superficie de las celulas -->

	<Plugin Name="Volume">
    	<TargetVolume>20</TargetVolume>
    	<LambdaVolume>5</LambdaVolume>
	</Plugin>   
 
	<Plugin Name="Surface">
    	<TargetSurface>20</TargetSurface>
    	<LambdaSurface>5</LambdaSurface>
	</Plugin> 
	
<!-- Pluggins para el algunos de los apuntadores -->
	
	<Plugin Name="CenterOfMass"/>    

	<Plugin Name="BoundaryPixelTracker">
		<NeighborOrder>1</NeighborOrder>
	</Plugin>

	<Plugin Name="VolumeLocalFlex"/>

	<Plugin Name="NeighborTracker">
		<NeighborOrder>1</NeighborOrder>
	</Plugin>
   
	<Plugin Name="PixelTracker"/>
	
	<Plugin Name="Secretion"/>
  
<!-- Energia de contacto entre los tipos celulares, a partir de esto se define la fuerza de adhesion (cuadro 2 de los metodos) -->
   
	<Plugin Name="Contact">
    	<Energy Type1="Medium" Type2="Medium">0.0</Energy>
    	<Energy Type1="Medium" Type2="Inhibida">10.0</Energy>
    	<Energy Type1="Medium" Type2="Activada">10.0</Energy>
    	<Energy Type1="Inhibida" Type2="Inhibida">8</Energy>
    	<Energy Type1="Inhibida" Type2="Activada">8</Energy>
    	<Energy Type1="Activada" Type2="Activada">8</Energy>
    	<Energy Type1="Inhibida" Type2="Wall">50.0</Energy>
    	<Energy Type1="Medium" Type2="Wall">0.0</Energy>
    	<Energy Type1="Activada" Type2="Wall">50.0</Energy>
    	<Energy Type1="Wall" Type2="Wall">0.0</Energy>
		<NeighborOrder>1</NeighborOrder>
	</Plugin>
   
<!-- Este steppable define la difusion y degradacion externa del inhibidor -->

	<Steppable Type="FlexibleDiffusionSolverFE">
		<DiffusionField>
			<DiffusionData>
				<FieldName>Iext</FieldName>
				<DiffusionConstant>0.045</DiffusionConstant>   
				<DecayConstant>0.001</DecayConstant>
				<DoNotDiffuseTo>Activada</DoNotDiffuseTo>
				<DoNotDiffuseTo>Inhibida</DoNotDiffuseTo>
			</DiffusionData>
		</DiffusionField> 
	</Steppable>


<!-- Los siguientes steppables definen la forma inicial. -->
<!-- A: Celulas disperas, B: Bola. Ni A ni B: filamento (aunque falta definirlo en el documento adhesionComunicacionSteppables.py) -->

<!-- A: celulas dispersa. -->
	<!--Steppable Type="PIFInitializer">
    	<PIFName>Simulation/random_2D.pif</PIFName>
	</Steppable-->
   
<!-- B: Bola -->

	<Steppable Type="BlobInitializer"> 
		<Region> 
			<Center x="34" y="34" z="0"/> 
     		<Radius>27</Radius> 
      		<Gap>0</Gap> 
   			<Width>5</Width> 
    		<Types>Inhibida</Types> 
  		</Region> 
	</Steppable>

</CompuCell3D>





